<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.1" FeatureVersion="1.0" MaturityLevel="Normative" Originator="org.silastandard" Category="core"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>ConnectionConfigurationService</Identifier>
  <DisplayName>Connection Configuration Service</DisplayName>
  <Description>
    This Feature MUST be implemented by each SiLA Server that offers a Server-initiated connection.

    The server-initiated connection mode is persistent, it keeps the state after a restart. Connect to a SiLA Client passing the required information and optionally keep the connection details persistent, so the SiLA Server will reconnect after a restart.
  </Description>
  <Command>
    <Identifier>EnableServerInitiatedConnectionMode</Identifier>
    <DisplayName>Enable Server Initiated Connection Mode</DisplayName>
    <Description>Enable the server initiated connection mode.</Description>
    <Observable>No</Observable>
  </Command>
  <Command>
    <Identifier>DisableServerInitiatedConnectionMode</Identifier>
    <DisplayName>Disable Server Initiated Connection Mode</DisplayName>
    <Description>Disable the server initiated connection mode.</Description>
    <Observable>No</Observable>
  </Command>
  <Command>
    <Identifier>ConnectSiLAClient</Identifier>
    <DisplayName>Connect SiLA Client</DisplayName>
    <Description>Connect a new SiLA Client.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>ClientName</Identifier>
      <DisplayName>Client Name</DisplayName>
      <Description>Human readable name of the SiLA Client. Has to be unique among the already connected clients (see property ConfiguredSiLAClients).</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>String</Basic>
          </DataType>
          <Constraints>
            <MaximalLength>255</MaximalLength>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>SiLAClientHost</Identifier>
      <DisplayName>SiLA Client Host</DisplayName>
      <Description>Host Address of the new SiLA Client.</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>String</Basic>
          </DataType>
          <Constraints>
            <MaximalLength>255</MaximalLength>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>SiLAClientPort</Identifier>
      <DisplayName>SiLA Client Port</DisplayName>
      <Description>Port of the new SiLA Client.</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>Integer</Basic>
          </DataType>
          <Constraints>
            <MinimalExclusive>0</MinimalExclusive>
            <MaximalInclusive>65536</MaximalInclusive>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>Persist</Identifier>
      <DisplayName>Persist connection</DisplayName>
      <Description>Whether or not the connection should be persisted.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Parameter>
  </Command>
  <Command>
    <Identifier>DisconnectSiLAClient</Identifier>
    <DisplayName>Disconnect SiLA Client</DisplayName>
    <Description>Disconnect a configured SiLA Client.</Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>ClientName</Identifier>
      <DisplayName>Client Name</DisplayName>
      <Description>Human readable name of the SiLA Client.</Description>
      <DataType>
        <Constrained>
          <DataType>
            <Basic>String</Basic>
          </DataType>
          <Constraints>
            <MaximalLength>255</MaximalLength>
          </Constraints>
        </Constrained>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>Remove</Identifier>
      <DisplayName>Remove connection</DisplayName>
      <Description>Whether or not to remove the connection details.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Parameter>
  </Command>
  <DefinedExecutionError>
    <Identifier>InvalidSiLAClient</Identifier>
    <DisplayName>Invalid SiLA Client</DisplayName>
    <Description>Invalid SiLA Client specified. E.g. invalid hostname</Description>
  </DefinedExecutionError>
  <Property>
    <Identifier>ServerInitiatedConnectionModeStatus</Identifier>
    <DisplayName>Server Initiated Connection Mode Active</DisplayName>
    <Description>Whether or not the server initiated connection mode is active.</Description>
    <Observable>No</Observable>
    <DataType>
      <Basic>Boolean</Basic>
    </DataType>
  </Property>
  <Property>
    <Identifier>ConfiguredSiLAClients</Identifier>
    <DisplayName>Get Configured SiLA Clients</DisplayName>
    <Description>
      Get the configured SiLA Clients used for server-initiated connections.
    </Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <Structure>
            <Element>
              <Identifier>ClientName</Identifier>
              <DisplayName>Client Name</DisplayName>
              <Description>Human readable name of the SiLA Client.</Description>
              <DataType>
                <Basic>String</Basic>
              </DataType>
            </Element>
            <Element>
              <Identifier>SiLAClientHost</Identifier>
              <DisplayName>SiLA Client Host</DisplayName>
              <Description>Host Address of the SiLA Client.</Description>
              <DataType>
                <Basic>String</Basic>
              </DataType>
            </Element>
            <Element>
              <Identifier>SiLAClientPort</Identifier>
              <DisplayName>SiLA Client Port</DisplayName>
              <Description>Port of the SiLA Client.</Description>
              <DataType>
                <Basic>Integer</Basic>
              </DataType>
            </Element>
          </Structure>
        </DataType>
      </List>
    </DataType>
  </Property>
</Feature>
