<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.0" FeatureVersion="1.0" MaturityLevel="Draft" Originator="com.madisoft" Category="reader"
        xmlns="http://www.sila-standard.org"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
        xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>LuminescenceReaderService</Identifier>
    <DisplayName>Luminescence Reader Service</DisplayName>
    <Description>SiLA 2 Device Luminescence Reader feature - Show basic operations for a device luminescence reader
        like reading from selected well of a plate and reading from all wells in a plate.
        Luminescence reading has an integration property from 0.1 to 10 seconds.
    </Description>
    <Command>
        <Identifier>LuminescenceReadWell</Identifier>
        <DisplayName>Luminescence Read Well</DisplayName>
        <Description>Read and present data from one target well</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>TargetWell</Identifier>
            <DisplayName>Target Well</DisplayName>
            <Description>Address of the target well on the plate which the reader will try to find, reach
                and will try to read the well data.
            </Description>
            <DataType>
                <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>WellRelativeLuminescenceUnits</Identifier>
            <DisplayName>Well Relative Luminescence Units</DisplayName>
            <Description>Relative Luminescence Units measurement of the well</Description>
            <DataType>
                <DataTypeIdentifier>RelativeLuminescenceUnits</DataTypeIdentifier>
            </DataType>
        </Response>
    </Command>
    <Command>
        <Identifier>LuminescenceReadPlate</Identifier>
        <DisplayName>Luminescence Read Plate</DisplayName>
        <Description>Go through every plate well and read its result</Description>
        <Observable>Yes</Observable>
            <Response>
            <Identifier>ResultList</Identifier>
            <DisplayName>Result List Values</DisplayName>
            <Description>Result list of values of every well</Description>
            <DataType>
                <List>
                    <DataType>
                        <Structure>
                            <Element>
                                <Identifier>WellAddress</Identifier>
                                <DisplayName>WellAddress</DisplayName>
                                <Description />
                                <DataType>
                                    <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
                                </DataType>
                            </Element>
                            <Element>
                                <Identifier>WellRelativeLuminescenceUnits</Identifier>
                                <DisplayName>Well Relative Luminescence Units</DisplayName>
                                <Description>Relative Luminescence Units measurement of the well</Description>
                                <DataType>
                                    <DataTypeIdentifier>RelativeLuminescenceUnits</DataTypeIdentifier>
                                </DataType>
                            </Element>
                        </Structure>
                    </DataType>
                </List>
            </DataType>
        </Response>
    </Command>
    <Property>
        <Identifier>IntegrationFilter</Identifier>
        <DisplayName>Integration Filter</DisplayName>
        <Description>Integration time filter for Luminescence read</Description>
        <Observable>No</Observable>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Real</Basic>
                </DataType>
                <Constraints>
                    <Unit>
                        <Label>Second</Label>
                        <Factor>1</Factor>
                        <Offset>0</Offset>
                        <UnitComponent>
                            <SIUnit>Second</SIUnit>
                            <Exponent>1</Exponent>
                        </UnitComponent>
                    </Unit>
                    <MinimalInclusive>0.1</MinimalInclusive>
                    <MaximalInclusive>10.0</MaximalInclusive>
                </Constraints>
            </Constrained>
        </DataType>
    </Property>
    <!-- DataTypeDefinitions -->
    <DataTypeDefinition>
        <Identifier>WellAddress</Identifier>
        <DisplayName>Well Address</DisplayName>
        <Description>Well address on the plate which the reader will try to find, reach and will try to read the well data.
            The plate is like a matrix of wells and every well has addess which is unique and consists of two parts:
            1. First part is a letter from A to Z and shows the well row of the matrix
            2. Second part is a positive number 1, 2, 3, ... which shows the column of the plate matrix
            Example: A1, A2, ..., B1, B2, ...
            This property defines the first part of the well address.
        </Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>Row</Identifier>
                    <DisplayName>Row</DisplayName>
                    <Description>Row of the well address A, B, C, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>String</Basic>
                            </DataType>
                            <Constraints>
                                <Length>1</Length>
                                <Pattern>[A-Z]</Pattern>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Column</Identifier>
                    <DisplayName>Column</DisplayName>
                    <Description>Column of the well address 1, 2, 3, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Integer</Basic>
                            </DataType>
                            <Constraints>
                                <MinimalInclusive>0</MinimalInclusive>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>
    <DataTypeDefinition>
        <Identifier>RelativeLuminescenceUnits</Identifier>
        <DisplayName>Relative Luminescence Units</DisplayName>
        <Description>
            Unit of measurement used in analysis which employs luminescence detection.
            It is dimensionless. Values are between 0 and 1 billion.
        </Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Integer</Basic>
                </DataType>
                <Constraints>
                    <MinimalInclusive>0</MinimalInclusive>
                    <MaximalInclusive>1000000000</MaximalInclusive>
                </Constraints>
            </Constrained>
        </DataType>
    </DataTypeDefinition>
</Feature>
